PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = low_PL
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Routines
  Routine Hi
    TextComponent instr_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Эксперимент!!
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    KeyboardComponent intsr_key
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Bye
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Спс!!!
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  Routine High_PL
  Routine Low_PL
  Routine fix
    TextComponent fix_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine mask
    TextComponent up_up_letter
      letterHeight = 0.08
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $up_up
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    TextComponent left_up_letter
      letterHeight = 0.08
      pos = (-0.1, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $left_up
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    TextComponent left_down_letter
      letterHeight = 0.08
      pos = (-0.1, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $left_down
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    TextComponent down_down_letter
      letterHeight = 0.08
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $down_down
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    TextComponent right_down_letter
      letterHeight = 0.08
      pos = (0.1, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $right_down
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    TextComponent right_up_letter
      letterHeight = 0.08
      pos = (0.1, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $right_up
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'n','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        acc = []
      End Routine:
        if key_resp.keys:
            if key_resp.keys == condition:
                acc.append('1')
            else:
                acc.append('0')
    TextComponent side_right
      letterHeight = 0.2
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $SIDE_right
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    TextComponent side_left
      letterHeight = 0.2
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $SIDE_left
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  Routine block_3
    TextComponent block_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Блок 2
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Flow
  Routine Hi
  LoopInitiator low_1 loopType="TrialHandler"
    conditionsFile = stimuli_low.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('up_up', 'N'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', ' ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'N'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', ' ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'N'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', ' ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'N'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', ' ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'N'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', ' ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'N'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', ' ')]),
      OrderedDict([('up_up', 'N'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Inco'), ('SIDE_left', 'X'), ('corr_ans', 'N'), ('SIDE_right', ' ')])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
    Routine fix
    Routine mask
  LoopTerminator low_1
  Routine block_3
  LoopInitiator high loopType="TrialHandler"
    conditionsFile = stimuli_high.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('up_up', 'N'), ('left_up', 'H'), ('left_down', 'M'), ('down_down', 'K'), ('right_down', 'Z'), ('right_up', 'V'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'V'), ('left_up', 'N'), ('left_down', 'H'), ('down_down', 'M'), ('right_down', 'K'), ('right_up', 'Z'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'Z'), ('left_up', 'V'), ('left_down', 'N'), ('down_down', 'H'), ('right_down', 'M'), ('right_up', 'K'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'K'), ('left_up', 'Z'), ('left_down', 'V'), ('down_down', 'N'), ('right_down', 'H'), ('right_up', 'M'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'M'), ('left_up', 'K'), ('left_down', 'Z'), ('down_down', 'V'), ('right_down', 'N'), ('right_up', 'H'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'H'), ('left_up', 'M'), ('left_down', 'K'), ('down_down', 'Z'), ('right_down', 'V'), ('right_up', 'N'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')])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
    Routine fix
    Routine mask
  LoopTerminator high
  Routine block_3
  LoopInitiator low_3 loopType="TrialHandler"
    conditionsFile = stimuli_low.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('up_up', 'N'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'N'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'N'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'N'), ('right_down', 'o'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'N'), ('right_up', 'o'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')]),
      OrderedDict([('up_up', 'o'), ('left_up', 'o'), ('left_down', 'o'), ('down_down', 'o'), ('right_down', 'o'), ('right_up', 'N'), ('condition', 'Cong'), ('SIDE_left', 'N'), ('corr_ans', 'N'), ('SIDE_right', '      ')])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
    Routine fix
    Routine mask
  LoopTerminator low_3
  Routine Bye
